import java.io.File;
import ij.IJ;
import ij.ImagePlus;
import ij.plugin.Duplicator;
import io.github.rocsg.fijirelax.mrialgo.HyperMap;
import io.github.rocsg.fijirelax.mrialgo.NoiseManagement;
import io.github.rocsg.fijiyama.fijiyamaplugin.RegistrationAction;
import io.github.rocsg.fijiyama.common.VitimageUtils;
import io.github.rocsg.fijiyama.common.VitiDialogs;
import io.github.rocsg.fijirelax.gui.MRI_HyperCurvesExplorer;

//switch variable to use or not use visual debug information
boolean useVisualDebugThatIsVeryInterestingButImplySlowerComputation=false;


//Get FijiRelax archive directory path
String mainDir=VitiDialogs.chooseDirectoryUI("Select FijiRelax DOI directory","Dir that contains Case_0_Brain, Case_1 ...");

//Input data directory definition
File f=new File(mainDir,"Experiments_for_figures_and_tables");
f=new File(f.getAbsolutePath(),"Input_data");
f=new File(f.getAbsolutePath(),"Images");
f=new File(f.getAbsolutePath(),"B098_J0_raw_dicomdir");
String sourcePathRawDicom=f.getAbsolutePath();
System.out.println(f.exists());

//Output image definition
f=new File(mainDir,"Experiments_for_figures_and_tables");
f=new File(f.getAbsolutePath(),"Results_and_evaluation");
f=new File(f.getAbsolutePath(),"My_results");
f=new File(f.getAbsolutePath(),"Images");
f=new File(f.getAbsolutePath(),"Result_hypermap_figure_1b_left.tif");
String targetPathHyperMap=f.getAbsolutePath();


//Import data
HyperMap hyperVine=HyperMap.importHyperMapFromRawDicomData(sourcePathRawDicom,"Test_data");

//Register echoes with visual debug
if(useVisualDebugThatIsVeryInterestingButImplySlowerComputation) {
	IJ.showMessage("Now a succession of registration routines will run in visual mode, during 15 minutes. Don't expect to do nothing with your computer, or run it again, but activate the stealth mode, line 9. The result will appear as an image at the end, with a popup like this one");
	hyperVine.registerEchoes();
}
else {//register echoes in stealth mode, faster
	IJ.showMessage("Now a succession of registration routines will run in stealth mode, during 6 minutes. The result will appear as an image at the end, with a popup like this one");
	RegistrationAction regAct=hyperVine.getDefaultRegistrationSettings();
	regAct.typeAutoDisplay=0;
	hyperVine.registerEchoes(regAct);
}

//Compute maps
hyperVine.computeMaps();

//Get, display and save the result image
ImagePlus imageVine=hyperVine.getAsImagePlus();
imageVine.show();
imageVine.setTitle("Results_figure_1b_right");
imageVine.setC(1);
imageVine.setDisplayRange(0, 10000);
imageVine.setC(2);
imageVine.setDisplayRange(0, 3000);
imageVine.setC(3);
imageVine.setDisplayRange(0, 120);
imageVine.setZ(20);

//Here is the figure 1a and S2
IJ.saveAsTiff(imageVine,targetPathHyperMap);
IJ.showMessage("Your result have been saved to "+targetPathHyperMap+"\n.\nComputation done !");
